WorkflowBuilder(Version=2.9.0)
GroupWorkflow MetaData
    GroupWorkflow HardwareDevices
        GroupWorkflow BehaviorBoards
            IncludeWorkflow
              Path=UclOpen.Devices:BehaviorBoard.BehaviorBoard.bonsai
              CommandsSubjectName=BehaviorCommands
              PortName=COM11
              DumpRegisters=true
              Heartbeat=Disabled
              EventsSubjectName=BehaviorEvents

            IncludeWorkflow
              Path=UclOpen.Devices:BehaviorBoard.RunningWheel.bonsai
              CommandsSubjectName=BehaviorCommands
              EventsSubjectName=BehaviorEvents
              CountsPerRev=1024
              WheelDiameterMm=170
              WheelDistanceSubjectName=WheelDistanceCm

            IncludeWorkflow
              Path=UclOpen.Devices:BehaviorBoard.PulseController.bonsai
              BehaviorCommandsSubjectName=BehaviorCommands
              OutputPulseEnable="DO1 DO2 DO3"
              PulseDO1=100
              PulseDO2=100
              PulseDO3=100
              BehaviorEventsSubjectName=BehaviorEvents
              TriggerPulseSubjectName=TriggerValve

            GroupWorkflow CameraTriggerController
                Disable BehaviorSubject<System.Object> StartCameras => #0
                SubscribeSubject StartCameras => #1
                #0, #1 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput0)) => #2
                BehaviorSubject<System.Object> StopCameras
                -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStopCamerasPayload(StopCameras=CameraOutput0)) => #4
                ExternalizedMapping(Value(DisplayName=TriggerFrequency, Description="The frequency at which to trigger global cameras."))
                -> DoubleProperty(Value=50)
                -> BehaviorSubject TriggerFrequency
                -> PropertyMapping(Camera0Frequency)
                -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateCamera0FrequencyPayload(Camera0Frequency=50)) => #9
                #2, #4, #9 -> Merge => #10
                ExternalizedMapping => #11
                  Name
                    DisplayName=BehaviorCommandsSubjectName
                    Description="The name of the commands subject for the behavior board that triggers camera frames"
                    Category=Subjects
                #10, #11 -> MulticastSubject BehaviorCommands => #12
                ExternalizedMapping => #13
                  Name
                    DisplayName=BehaviorEventsSubjectName
                    Description="The name of the subject carrying events from the behavior board that triggers camera frames"
                    Category=Subjects
                -> SubscribeSubject BehaviorEvents
                -> Delay(DueTime=PT0.5S) => #15
                #12, #15 -> SubscribeWhen
                -> WorkflowOutput
                #13 -> SubscribeSubject BehaviorEvents
                -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera0Frame) => #19
                ExternalizedMapping => #20
                  Name
                    DisplayName=CameraTriggerEventsSubjectName
                    Description="The name of the subject to which timestamped camera trigger events from the behavior board are published"
                    Category=Subjects
                #19, #20 -> PublishSubject CameraTriggerEvents

            IncludeWorkflow(Path=UclOpen.Devices:BehaviorBoard.Timestamps.bonsai, EventsSubjectName=BehaviorEvents, CommandsSubjectName=BehaviorCommands)

        GroupWorkflow LicketySplits
            IncludeWorkflow
              Path=UclOpen.Devices:LicketySplit.bonsai
              CommandsSubjectName=LickCommandsLeft
              PortName=COM15
              DumpRegisters=true
              Heartbeat=Disabled
              EventsSubjectName=LickEventsLeft
              Channel0TriggerThreshold=255
              Channel0UntriggerThreshold=255
              LickStateSubjectName=LickStateLeft

            IncludeWorkflow
              Path=UclOpen.Devices:LicketySplit.bonsai
              CommandsSubjectName=LickCommandsRight
              PortName=COM13
              DumpRegisters=true
              Heartbeat=Disabled
              EventsSubjectName=LickEventsRight
              Channel0TriggerThreshold=0
              Channel0UntriggerThreshold=0
              LickStateSubjectName=LickStateRight

        GroupWorkflow Cameras
            IncludeWorkflow
              Path=UclOpen.Devices:TriggeredSpinnaker.bonsai
              ExposureTime=19000
              Gain=0
              Binning=1
              SerialNumber=25366318
              ColorProcessing=Default
              CameraTriggerEventsSubjectName=CameraTriggerEvents
              FrameEventsSubjectName=FrameEvents1

            IncludeWorkflow
              Path=UclOpen.Devices:TriggeredSpinnaker.bonsai
              ExposureTime=19000
              Gain=0
              Binning=1
              SerialNumber=25366328
              ColorProcessing=Default
              CameraTriggerEventsSubjectName=CameraTriggerEvents
              FrameEventsSubjectName=FrameEvents2

            IncludeWorkflow
              Path=UclOpen.Devices:TriggeredSpinnaker.bonsai
              ExposureTime=19000
              Gain=0
              Binning=1
              SerialNumber=25366326
              ColorProcessing=Default
              CameraTriggerEventsSubjectName=CameraTriggerEvents
              FrameEventsSubjectName=FrameEvents3

        Disable GroupWorkflow StepperMotors
            StringProperty(Value=COM6)
            -> BehaviorSubject StepperPortName

            ExternalizedMapping(Name(DisplayName=StepperPortName))
            -> SubscribeSubject StepperPortName
            -> PropertyMapping(PortName)
            -> Bonsai.IO.Ports.SerialRead(PortName=COM6, Count=1)
            -> ConvertByteArrayToString
            -> Repeat

            Annotation InitHomePosition(Text=InitHomePosition) => #8
            Bonsai.Shaders.Timer(DueTime=PT0.5S) => #9
            #8, #9 -> StringProperty(Value="0,0,0,0,0;")
            -> BehaviorSubject StepperPositionCommand

            SubscribeSubject StepperPosition_BothIn
            -> MulticastSubject StepperPositionCommand => #13
            Bonsai.Shaders.Timer(DueTime=PT1S) => #14
            #13, #14 -> SubscribeWhen

            SubscribeSubject StepperPositionCommand
            -> GroupWorkflow stepperCommand_MoveTo => #17
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name) => #1
                #0, #1 -> SelectMany
                    ExternalizedMapping(Name)
                    -> SubscribeSubject StepperPortName
                    -> PropertyMapping(PortName) => #2
                    ByteProperty(Value=71) => #3
                    WorkflowInput Source1 => #4
                    #3, #4 -> Zip
                    -> CreateStepperMessage => #6
                    #2, #6 -> Bonsai.IO.Ports.SerialWrite(PortName=COM10)
                    -> WorkflowOutput
                -> WorkflowOutput
            StringProperty(Value=300;)
            -> GroupWorkflow stepperCommand_AdjustSpeed
                WorkflowInput Source1
                -> SelectMany
                    ExternalizedMapping(Name)
                    -> SubscribeSubject StepperPortName
                    -> PropertyMapping(PortName) => #2
                    Annotation CommandByte_AdjustSpeed(Text=CommandByte_AdjustSpeed)
                    -> ByteProperty(Value=72) => #4
                    WorkflowInput Source1 => #5
                    #4, #5 -> Zip
                    -> CreateStepperMessage => #7
                    #2, #7 -> Bonsai.IO.Ports.SerialWrite(PortName=COM10)
                    -> WorkflowOutput
                -> WorkflowOutput
            -> Bonsai.Shaders.Delay(DueTime=PT0.1S)
            -> StringProperty(Value="20,2;")
            -> GroupWorkflow stepperCommand_AdjustAcceleration
                WorkflowInput Source1
                -> SelectMany
                    ExternalizedMapping(Name)
                    -> SubscribeSubject StepperPortName
                    -> PropertyMapping(PortName) => #2
                    Annotation CommandByte_AdjustAcceleration(Text=CommandByte_AdjustAcceleration)
                    -> ByteProperty(Value=73) => #4
                    WorkflowInput Source1 => #5
                    #4, #5 -> Zip
                    -> CreateStepperMessage => #7
                    #2, #7 -> Bonsai.IO.Ports.SerialWrite(PortName=COM6)
                    -> WorkflowOutput
                -> WorkflowOutput
            -> Bonsai.Shaders.Delay(DueTime=PT0.1S) => #23
            #17, #23 -> SubscribeWhen

        GroupWorkflow StepperDriver
            GroupWorkflow InitializeStepperDrivers
                BehaviorSubject<Bonsai.Harp.HarpMessage> StepperDriver1Commands => #0
                ExternalizedMapping(PortName(DisplayName=StepperDriver1PortName)) => #1
                #0, #1 -> Harp.StepperDriver.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM14)
                -> BehaviorSubject StepperDriver1Events

                BehaviorSubject<Bonsai.Harp.HarpMessage> StepperDriver2Commands => #4
                ExternalizedMapping(PortName(DisplayName=StepperDriver2PortName)) => #5
                #4, #5 -> Harp.StepperDriver.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM12)
                -> BehaviorSubject StepperDriver2Events

            GroupWorkflow ReadSwitchStates
                SubscribeSubject StepperDriver1Events
                -> Harp.StepperDriver.Parse(Register=Harp.StepperDriver.DigitalInputState)
                -> UnpackSwitchTriggers => #2
                -> Index(Operand=IntProperty(Value=0))
                -> BehaviorSubject _Motor0_switchState
                #2 -> Index(Operand=IntProperty(Value=1))
                -> BehaviorSubject _Motor1_switchState
                #2 -> Index(Operand=IntProperty(Value=2))
                -> BehaviorSubject _Motor2_switchState

                SubscribeSubject StepperDriver2Events
                -> Harp.StepperDriver.Parse(Register=Harp.StepperDriver.DigitalInputState)
                -> UnpackSwitchTriggers => #11
                -> Index(Operand=IntProperty(Value=0))
                -> BehaviorSubject _Motor3_switchState
                #11 -> Index(Operand=IntProperty(Value=1))
                -> BehaviorSubject _Motor4_switchState

            GroupWorkflow InitialiseStepperDriverSettings
                SubscribeSubject StepperDriver1Events
                -> Take(Count=20)
                -> TakeLast(Count=1)
                -> Delay(DueTime=PT0.1S)
                -> Unit
                -> Defer "Initialize StepperDriver1"
                    WorkflowInput Source1

                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInterlockEnabledPayload(InterlockEnabled=Open)) => #1
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDriverPayload(EnableDriver="Motor0 Motor1 Motor2")) => #2
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MaximumRunCurrentPayload(Motor0MaximumRunCurrent=0.5)) => #3
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MaximumRunCurrentPayload(Motor1MaximumRunCurrent=0.5)) => #4
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor2MaximumRunCurrentPayload(Motor2MaximumRunCurrent=0.5)) => #5
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MicrostepResolutionPayload(Motor0MicrostepResolution=Microstep8)) => #6
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MicrostepResolutionPayload(Motor1MicrostepResolution=Microstep8)) => #7
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor2MicrostepResolutionPayload(Motor2MicrostepResolution=Microstep8)) => #8
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableEncodersPayload(EnableEncoders="Encoder0 Encoder1 Encoder2")) => #9
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateResetEncodersPayload(ResetEncoders="Encoder0 Encoder1 Encoder2")) => #10
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderModePayload(EncoderMode=Position)) => #11
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderSamplingRatePayload(EncoderSamplingRate=Rate500Hz)) => #12
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateAccumulatedStepsSamplingRatePayload(AccumulatedStepsSamplingRate=Rate100Hz)) => #13
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDigitalInputsPayload(EnableDigitalInputs="Input0 Input1 Input2")) => #14
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput0OpModePayload(Input0OpMode=StopMotor0OnFalling)) => #15
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput1OpModePayload(Input1OpMode=StopMotor1OnFalling)) => #16
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput2OpModePayload(Input2OpMode=StopMotor2OnFalling)) => #17
                    IntProperty(Value=25) => #18
                    -> PropertyMapping(Motor0StepInterval)
                    -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0StepIntervalPayload(Motor0StepInterval=200)) => #20
                    #18 -> PropertyMapping(Motor1StepInterval)
                    -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1StepIntervalPayload(Motor1StepInterval=200)) => #22
                    #18 -> PropertyMapping(Motor2StepInterval)
                    -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor2StepIntervalPayload(Motor2StepInterval=200)) => #24
                    #1, #2, #3, #4, #5, #6, #7, #8, #9, #10, #11, #12, #13, #14, #15, #16, #17, #20, #22, #24 -> Concat
                    -> MulticastSubject StepperDriver1Commands
                    -> WorkflowOutput
                -> Delay(DueTime=PT0.1S) => #6
                SubscribeSubject StepperDriver2Events
                -> Take(Count=20)
                -> TakeLast(Count=1)
                -> Delay(DueTime=PT0.2S)
                -> Unit
                -> Defer "Initialize StepperDriver2"
                    WorkflowInput Source1

                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInterlockEnabledPayload(InterlockEnabled=Open)) => #1
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDriverPayload(EnableDriver="Motor0 Motor1")) => #2
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MaximumRunCurrentPayload(Motor0MaximumRunCurrent=0.5)) => #3
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MaximumRunCurrentPayload(Motor1MaximumRunCurrent=0.5)) => #4
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MicrostepResolutionPayload(Motor0MicrostepResolution=Microstep8)) => #5
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MicrostepResolutionPayload(Motor1MicrostepResolution=Microstep8)) => #6
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableEncodersPayload(EnableEncoders="Encoder0 Encoder1")) => #7
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateResetEncodersPayload(ResetEncoders="Encoder0 Encoder1")) => #8
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderModePayload(EncoderMode=Position)) => #9
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderSamplingRatePayload(EncoderSamplingRate=Rate500Hz)) => #10
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateAccumulatedStepsSamplingRatePayload(AccumulatedStepsSamplingRate=Rate100Hz)) => #11
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDigitalInputsPayload(EnableDigitalInputs="Input0 Input1")) => #12
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput0OpModePayload(Input0OpMode=StopMotor0OnFalling)) => #13
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput1OpModePayload(Input1OpMode=StopMotor1OnFalling)) => #14
                    IntProperty(Value=25) => #15
                    -> PropertyMapping(Motor0StepInterval)
                    -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0StepIntervalPayload(Motor0StepInterval=200)) => #17
                    #15 -> PropertyMapping(Motor1StepInterval)
                    -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1StepIntervalPayload(Motor1StepInterval=200)) => #19
                    #1, #2, #3, #4, #5, #6, #7, #8, #9, #10, #11, #12, #13, #14, #17, #19 -> Concat
                    -> MulticastSubject StepperDriver2Commands
                    -> WorkflowOutput
                -> Delay(DueTime=PT0.1S) => #13
                #6, #13 -> Zip
                -> BooleanProperty(Value=true)
                -> BehaviorSubject StepperDriversInitialized => #16
                Annotation "Ensure I get the initial states"(Text="") => #17
                #16, #17 -> Harp.StepperDriver.CreateMessage(MessageType=Read, Payload=Harp.StepperDriver.CreateDigitalInputStatePayload(DigitalInputState=None)) => #18
                -> MulticastSubject StepperDriver1Commands
                #18 -> MulticastSubject StepperDriver2Commands

            GroupWorkflow ZEROMotors
                IncludeWorkflow => #0
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor0_switchState
                  MotorID=0
                  SubjectName_StepperDriver=StepperDriver1Commands
                  SubjectName_switchState_again=_Motor0_switchState
                IncludeWorkflow => #1
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor1_switchState
                  MotorID=1
                  SubjectName_StepperDriver=StepperDriver1Commands
                  SubjectName_switchState_again=_Motor1_switchState
                IncludeWorkflow => #2
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor2_switchState
                  MotorID=2
                  SubjectName_StepperDriver=StepperDriver1Commands
                  SubjectName_switchState_again=_Motor2_switchState
                IncludeWorkflow => #3
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor3_switchState
                  MotorID=0
                  SubjectName_StepperDriver=StepperDriver2Commands
                  SubjectName_switchState_again=_Motor3_switchState
                IncludeWorkflow => #4
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor4_switchState
                  MotorID=1
                  SubjectName_StepperDriver=StepperDriver2Commands
                  SubjectName_switchState_again=_Motor4_switchState
                #0, #1, #2, #3, #4 -> Zip
                -> WorkflowOutput

            GroupWorkflow MoveMotors
                Disable SubscribeSubject raisePlatform => #0
                Disable SubscribeSubject IN_Position => #1
                #0, #1 -> Disable CombineLatest
                -> Disable MemberSelector(Selector=Item2)
                -> Disable IncludeWorkflow(Path=Extensions\MoveStepperMotors.bonsai)

                Disable SubscribeSubject lowerPlatform => #5
                Disable SubscribeSubject HOME_Position => #6
                #5, #6 -> Disable CombineLatest
                -> Disable MemberSelector(Selector=Item2)
                -> Disable IncludeWorkflow(Path=Extensions\MoveStepperMotors.bonsai)

                SubscribeSubject StepperPositionCommand
                -> IncludeWorkflow(Path=Extensions\MoveStepperMotors.bonsai)

                Disable IntProperty(Value=0) => #12
                Disable IntProperty(Value=0) => #13
                Disable IntProperty(Value=0) => #14
                Disable IntProperty(Value=0) => #15
                Disable IntProperty(Value=0) => #16
                #12, #13, #14, #15, #16 -> Disable Zip => #17
                -> Disable BehaviorSubject HOME_Position
                #17 -> Disable Delay(DueTime=PT3S)
                -> Disable BehaviorSubject StepperPositionCommand

                Disable IntProperty(Value=6000) => #21
                Disable IntProperty(Value=4000) => #22
                Disable IntProperty(Value=6000) => #23
                Disable IntProperty(Value=9000) => #24
                Disable IntProperty(Value=9500) => #25
                #21, #22, #23, #24, #25 -> Disable Zip
                -> Disable BehaviorSubject IN_Position

        Disable SubscribeSubject LickEventsLeft => #5
        -> Disable AllenNeuralDynamics.LicketySplit.Parse(Register=AllenNeuralDynamics.LicketySplit.LickState)
        #5 -> Disable AllenNeuralDynamics.LicketySplit.Parse(Register=AllenNeuralDynamics.LicketySplit.Channel0TriggerThreshold)
        #5 -> Disable AllenNeuralDynamics.LicketySplit.Parse(Register=AllenNeuralDynamics.LicketySplit.Channel0UntriggerThreshold)

    GroupWorkflow BonvisionResources
        Bonsai.Shaders.CreateWindow
          Width=1920
          Height=1080
          VSync=On
          SwapSync=false
          ClearColor=Black
          ClearMask="DepthBufferBit ColorBufferBit"
          CursorVisible=false
          Location=nil
          WindowBorder=Fixed
          WindowState=Fullscreen
          DisplayDevice=First
          TargetRenderFrequency=60
          TargetUpdateFrequency=nil
          RenderState=""
          GraphicsMode
            ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
            Depth=16
            Stencil=0
            Samples=0
            AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
            Buffers=2
            Stereo=false
        -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
        -> Disable Bonsai.Shaders.ShaderResources(Shaders="")
        -> Disable Bonsai.Shaders.MeshResources(Meshes="")
        -> Disable Bonsai.Shaders.TextureResources(Textures="")
        -> Bonsai.Resources.LoadResources

        Bonsai.Shaders.RenderFrame
        -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-135, Right=135, Bottom=-22.5, Top=82.5)
        -> PublishSubject DrawStimuli
        -> IncludeWorkflow
          Path=BonVision:Environment.MeshMapping.bonsai
          ClearColor=Gray
          FileName=C:\dev\av-dome\src\MeshMappingNew\MeshMap_AzRes_30_ElRes_30_Gerions_fancy_interpolation_python.csv

    GroupWorkflow Audio
        GroupWorkflow MixerDevice
            Bonsai.Mixer.CreateMixerContext(HostApi="Windows WDM-KS", DeviceName="Speakers (XMOS xCORE-200 MC (UAC2.0))", SampleRate=48000, SuggestedLatency=0.01)
            -> Bonsai.Mixer.StartMixer
            -> BehaviorSubject Mixer
            -> WorkflowOutput

            BehaviorSubject<OpenCV.Net.Mat> MixerBuffer => #4
            SubscribeSubject Mixer
            -> PropertyMapping(Mixer) => #6
            #4, #6 -> Bonsai.Mixer.QueueBuffer
        -> DelaySubscription(DueTime=PT2S)

        ExternalizedMapping(BackgroundPath(Category="Audio Paths"), GoCuePath(Category="Audio Paths"), PinkNoisePath(Category="Audio Paths"))
        -> GroupWorkflow LoadAudioFiles
            ExternalizedMapping(FileName(DisplayName=GoCuePath))
            -> Bonsai.Audio.AudioReader(FileName=C:\dev\av-dome\src\LocalFiles\go_cue.wav, BufferLength=0, SampleRate=0)
            -> Take(Count=1)
            -> Bonsai.Dsp.Rescale(Min=-32768, Max=32768, RangeMin=-1, RangeMax=1, RescaleType=Linear)
            -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=1, Shift=0)
            -> AsyncSubject goCue

            ExternalizedMapping(FileName(DisplayName=BackgroundPath))
            -> Bonsai.Audio.AudioReader(FileName=C:\dev\av-dome\src\LocalFiles\background_white_noise.wav, BufferLength=0, SampleRate=0)
            -> Take(Count=1)
            -> Bonsai.Dsp.Rescale(Min=-32768, Max=32768, RangeMin=-1, RangeMax=1, RescaleType=Linear)
            -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=1, Shift=0)
            -> AsyncSubject background

            ExternalizedMapping(FileName(DisplayName=PinkNoisePath))
            -> Bonsai.Audio.AudioReader(FileName=C:\dev\av-dome\src\LocalFiles\filtered_pink_pulse.wav, BufferLength=0, SampleRate=0)
            -> Take(Count=1)
            -> Bonsai.Dsp.Rescale(Min=-32768, Max=32768, RangeMin=-1, RangeMax=1, RescaleType=Linear)
            -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=1, Shift=0)
            -> AsyncSubject pink

        GroupWorkflow SpeakerLocations
            Bonsai.Shaders.CreateVector3(X=-90, Y=15, Z=0)
            -> Take(Count=1) => #1
            Bonsai.Shaders.CreateVector3(X=90, Y=15, Z=0)
            -> Take(Count=1) => #3
            Bonsai.Shaders.CreateVector3(X=0, Y=15, Z=0)
            -> Take(Count=1) => #5
            #1, #3, #5 -> Concat
            -> ToArray
            -> AsyncSubject SpeakerLocations

        GroupWorkflow ConstructWaveforms
            SubscribeSubject background
            -> Take(Count=1)
            -> Envelope(AttackDuration=0.001, ReleaseDuration=0.001, SampleRate=44100) => #2
            SubscribeSubject ChannelCount
            -> PropertyMapping(ChannelCount) => #4
            #2, #4 -> Broadcast(ChannelCount=32)
            -> ChannelActivation(Channels="", Gain(double=0.05))
            -> AsyncSubject AudioBackgroundAll

            SubscribeSubject pink
            -> Take(Count=1)
            -> Envelope(AttackDuration=0.001, ReleaseDuration=0.001, SampleRate=44100) => #10
            SubscribeSubject ChannelCount
            -> PropertyMapping(ChannelCount) => #12
            #10, #12 -> Broadcast(ChannelCount=32)
            -> ChannelActivation(Channels="", Gain(double=0.02))
            -> AsyncSubject AudioPinkAll

            SubscribeSubject goCue
            -> Take(Count=1)
            -> Envelope(AttackDuration=0.001, ReleaseDuration=0.001, SampleRate=44100) => #18
            SubscribeSubject ChannelCount
            -> PropertyMapping(ChannelCount) => #20
            #18, #20 -> Broadcast(ChannelCount=32)
            -> ChannelActivation(Channels="", Gain(double=0.02))
            -> AsyncSubject AudioGoCueAll

        ExternalizedMapping(Value(DisplayName=ChannelCount))
        -> IntProperty(Value=32)
        -> BehaviorSubject ChannelCount

        Annotation "31 is recording channel and 30 in NC. Just as place holder until set by trial"(Text="31 is recording channel and 30 in NC. Just as place holder until set by trial")
        -> IntProperty(Value=30)
        -> BehaviorSubject ActiveSoundChannels

        SubscribeSubject StartAuditoryStimulus
        -> SelectMany PlayStim
            SubscribeSubject pink
            -> Take(Count=1)
            -> Envelope(AttackDuration=0.001, ReleaseDuration=0.001, SampleRate=44100) => #2
            SubscribeSubject ChannelCount
            -> PropertyMapping(ChannelCount) => #4
            #2, #4 -> Broadcast(ChannelCount=32) => #5
            SubscribeSubject ActiveSoundChannels
            -> Take(Count=1)
            -> ToArray
            -> PropertyMapping(Channels) => #9
            #5, #9 -> ChannelActivation(Channels(int=30), Gain(double=0.02))
            -> MulticastSubject MixerBuffer

        SubscribeSubject StartAuditoryGoCue
        -> SelectMany PlayGo
            WorkflowInput Source1 => #0
            ExternalizedMapping(Name(DisplayName=WaveformSubjectName))
            -> SubscribeSubject AudioGoCueAll => #2
            #0, #2 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject MixerBuffer
            -> WorkflowOutput

        Bonsai.Windows.Input.KeyDown(Filter=G, SuppressRepetitions=false)
        -> BooleanProperty(Value=true)
        -> MulticastSubject StartAuditoryGoCue

        Bonsai.Windows.Input.KeyDown(Filter=Space, SuppressRepetitions=false)
        -> BooleanProperty(Value=true)
        -> MulticastSubject StartAuditoryStimulus

        Disable BehaviorSubject<System.Reactive.Unit> AudioTrigger
        -> Disable SelectMany PlayPink
            WorkflowInput Source1 => #0
            ExternalizedMapping(Name(DisplayName=WaveformSubjectName))
            -> SubscribeSubject AudioPinkAll => #2
            #0, #2 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject MixerBuffer
            -> WorkflowOutput

        Annotation "Currently only works with function generator"(Text="Currently only works with function generator")
        -> Annotation "Constant auditory background signal"(Text="Constant auditory background signal")
        -> SubscribeSubject AudioBackgroundAll
        -> MulticastSubject MixerBuffer

GroupWorkflow Declarations
    BehaviorSubject<System.Tuple(System.String,System.Int32)> ResponseData
    BehaviorSubject<System.String> TrialSuccess
    BehaviorSubject<System.Tuple(System.Int32,System.Single)> PerformanceTracking

    IntProperty(Value=0)
    -> BehaviorSubject TrialCount

    BooleanProperty(Value=false)
    -> BehaviorSubject VisualStimulusActive

    BooleanProperty(Value=true)
    -> Delay(DueTime=PT1S)
    -> BehaviorSubject StartCameras

    Annotation StepperPosition_BothIn(Text=StepperPosition_BothIn)
    -> IntProperty(Value=6000) => #11
    IntProperty(Value=4000) => #12
    IntProperty(Value=6000) => #13
    IntProperty(Value=9000) => #14
    IntProperty(Value=9500) => #15
    #11, #12, #13, #14, #15 -> Zip => #16
    -> BehaviorSubject StepperPosition_BothIn
    Annotation StepperPosition_BothOut(Text=StepperPosition_BothOut) => #18
    #16, #18 -> BehaviorSubject StepperPosition_BothOut

    IntProperty(Value=0) => #20
    IntProperty(Value=0) => #21
    IntProperty(Value=0) => #22
    IntProperty(Value=0) => #23
    IntProperty(Value=0) => #24
    #20, #21, #22, #23, #24 -> Zip => #25
    -> Delay(DueTime=PT3S)
    -> BehaviorSubject StepperPositionCommand
    #25 -> BehaviorSubject StepperPosition_HOME

    BooleanProperty(Value=false)
    -> BehaviorSubject StartAuditoryGoCue

    Annotation "JUST FOR TESTING"(Text="JUST FOR TESTING")
    -> Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-1, Upper=1)
    -> AsyncSubject AuditoryTargetSideDistribution

    BooleanProperty(Value=false)
    -> BehaviorSubject StartAuditoryStimulus

GroupWorkflow InitialiseTrials
    Bonsai.IO.ReadAllText(Path=C:\dev\av-dome\schemas\session.yml)
    -> DataSchema.DeserializeFromYaml(Type=TypeMapping<DataSchema.AvTask>)
    -> AsyncSubject TrialConfig

    SubscribeSubject TrialConfig
    -> TrialTypeInitialise(Seed=0, TrialType=0, LastResponse=0, WasTimeout=false, WasCorrect=false)
    -> BehaviorSubject thisTrialData

GroupWorkflow GUI
    Bonsai.Gui.ComboBoxBuilder "Mouse ID"(Enabled=true, Visible=true, Items(string=1001, string=1002, string=1003, string=1004), SelectedItem=1001)
    -> VisualizerMapping => #1
    Bonsai.Gui.ComboBoxBuilder Training(Enabled=true, Visible=true, Items(string="Stage A", string="Stage B", string="Stage C", string="Stage D"), SelectedItem="Stage A")
    -> VisualizerMapping => #3
    SubscribeSubject thisTrialData => #4
    -> MemberSelector(Selector=targetSide)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.TextBoxBuilder TargetSide(Enabled=true, Visible=true, Text=Right, Multiline=true)
    -> VisualizerMapping => #8
    #4 -> MemberSelector(Selector=trialType)
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.TextBoxBuilder TrialType(Enabled=true, Visible=true, Text=0, Multiline=true)
    -> VisualizerMapping => #13
    #4 -> MemberSelector(Selector=audioAzimuth)
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.TextBoxBuilder AudioLocationX(Enabled=true, Visible=true, Text=0, Multiline=true)
    -> VisualizerMapping => #18
    #1, #3, #8, #13, #18 -> Bonsai.Gui.TableLayoutPanelBuilder
      Enabled=true
      Visible=true
      ColumnCount=2
      RowCount=4
      ColumnStyles=""
      RowStyles=""
      CellSpans(CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=2, RowSpan=2))
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #22
    Bonsai.Gui.ToggleButtonBuilder Start(Enabled=true, Visible=true, Text="Start / Pause", Checked=true)
    -> BehaviorSubject StartSession
    -> VisualizerMapping => #25
    SubscribeSubject Camera1FrameForGUI
    -> VisualizerMapping => #27
    SubscribeSubject Camera2FrameForGUI
    -> VisualizerMapping => #29
    SubscribeSubject Camera3FrameForGUI
    -> VisualizerMapping => #31
    SubscribeSubject WheelDistanceCm
    -> VisualizerMapping => #33
    #27, #29, #31, #33 -> Bonsai.Gui.TableLayoutPanelBuilder
      Enabled=true
      Visible=true
      ColumnCount=3
      RowCount=2
      ColumnStyles=""
      RowStyles=""
      CellSpans(CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=3, RowSpan=1))
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text=Cameras)
    -> VisualizerMapping => #37
    Annotation "Display Detected Licks"(Text="Display Detected Licks")
    -> SubscribeSubject LickStateLeft
    -> Disable Equal(Operand=WorkflowProperty<AllenNeuralDynamics.LicketySplit.LickChannels>(Value=Channel0))
    -> PropertyMapping(Checked)
    -> Bonsai.Gui.CheckBoxBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 9.75pt", Text="Left Response", Checked=false)
    -> VisualizerMapping => #43
    Annotation "Display Detected Licks"(Text="Display Detected Licks")
    -> SubscribeSubject LickStateRight
    -> Disable Equal(Operand=WorkflowProperty<AllenNeuralDynamics.LicketySplit.LickChannels>(Value=Channel0))
    -> PropertyMapping(Checked)
    -> Bonsai.Gui.CheckBoxBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 9.75pt", Text="Right Response", Checked=false)
    -> VisualizerMapping => #49
    Bonsai.Gui.LabelBuilder Left(Enabled=true, Visible=true, Text=Left)
    -> VisualizerMapping => #51
    Bonsai.Gui.LabelBuilder Right(Enabled=true, Visible=true, Text=Right)
    -> VisualizerMapping => #53
    Annotation "Motor1 UP"(Text="Motor1 UP")
    -> Bonsai.Gui.ButtonBuilder "Left UP"(Enabled=true, Visible=true, Text=↑)
    -> PublishSubject Motor1_UP
    -> VisualizerMapping => #57
    SubscribeSubject StepperPosition_BothIn
    -> Format(Format="{0},{1},{2},{3},{4};", Selector="Item1,Item2,Item3,Item4,Item5")
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="1000,1000,2000,2000,500;")
    -> VisualizerMapping => #62
    Bonsai.Gui.ButtonBuilder "Right UP"(Enabled=true, Visible=true, Text=↑)
    -> PublishSubject Motor2_UP
    -> VisualizerMapping => #65
    Annotation "Motor1 DOWN"(Text="Motor1 DOWN")
    -> Bonsai.Gui.ButtonBuilder "Left DOWN"(Enabled=true, Visible=true, Text=↓)
    -> PublishSubject Motor1_DOWN
    -> VisualizerMapping => #69
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #71
    Bonsai.Gui.ButtonBuilder "Right DOWN"(Enabled=true, Visible=true, Text=↓)
    -> PublishSubject Motor2_DOWN
    -> VisualizerMapping => #74
    Bonsai.Gui.ButtonBuilder "Left FRONT"(Enabled=true, Visible=true, Text=↙)
    -> PublishSubject Motor4_UP
    -> VisualizerMapping => #77
    Bonsai.Gui.ButtonBuilder "Left BACK"(Enabled=true, Visible=true, Text=↗)
    -> PublishSubject Motor4_DOWN
    -> VisualizerMapping => #80
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #82
    Bonsai.Gui.ButtonBuilder "Right BACK"(Enabled=true, Visible=true, Text=↖)
    -> PublishSubject Motor3_DOWN
    -> VisualizerMapping => #85
    Bonsai.Gui.ButtonBuilder "Right FRONT"(Enabled=true, Visible=true, Text=↘)
    -> PublishSubject Motor3_UP
    -> VisualizerMapping => #88
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #90
    Bonsai.Gui.ButtonBuilder "Base LEFT"(Enabled=true, Visible=true, Text=←)
    -> PublishSubject Motor5_UP
    -> VisualizerMapping => #93
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #95
    Bonsai.Gui.ButtonBuilder "Base RIGHT"(Enabled=true, Visible=true, Text=→)
    -> PublishSubject Motor5_DOWN
    -> VisualizerMapping => #98
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #100
    Bonsai.Gui.ButtonBuilder HOME(Enabled=true, Visible=true, Text="ZERO (Home)")
    -> PublishSubject GUICallbackStepperHOME
    -> VisualizerMapping => #103
    Bonsai.Gui.ButtonBuilder IN(Enabled=true, Visible=true, Text=IN)
    -> PublishSubject GUICallbackStepperIN
    -> VisualizerMapping => #106
    Bonsai.Gui.ButtonBuilder OUT(Enabled=true, Visible=true, Text=OUT)
    -> PublishSubject GUICallbackStepperOUT
    -> VisualizerMapping => #109
    #51, #53, #57, #62, #65, #69, #71, #74, #77, #80, #82, #85, #88, #90, #93, #95, #98, #100, #103, #106, #109 -> Bonsai.Gui.TableLayoutPanelBuilder
      Enabled=true
      Visible=true
      ColumnCount=5
      RowCount=6
      ColumnStyles=""
      RowStyles=""
      CellSpans
        CellSpan(ColumnSpan=4, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=3, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=3, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text="Spout Position")
    -> VisualizerMapping => #113
    Bonsai.Gui.LabelBuilder Left(Enabled=true, Visible=true, Text="Left Valve")
    -> VisualizerMapping => #115
    Bonsai.Gui.LabelBuilder Right(Enabled=true, Visible=true, Text="Right Valve")
    -> VisualizerMapping => #117
    Bonsai.Gui.ButtonBuilder "LEFT FLUSH"(Enabled=true, Visible=true, Text="LEFT FLUSH")
    -> PublishSubject GUI_Callback_Left_flush
    -> VisualizerMapping => #120
    Bonsai.Gui.ButtonBuilder "RIGHT FLUSH"(Enabled=true, Visible=true, Text="RIGHT FLUSH")
    -> PublishSubject GUI_Callback_Right_flush
    -> VisualizerMapping => #123
    #115, #117, #120, #123 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text="Spout Position")
    -> VisualizerMapping => #127
    #22, #25, #37, #43, #49, #113, #127 -> Bonsai.Gui.TableLayoutPanelBuilder
      Enabled=true
      Visible=true
      ColumnCount=5
      RowCount=4
      ColumnStyles=""
      RowStyles=""
      CellSpans
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=3, RowSpan=4)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=2)
    -> Bonsai.Design.VisualizerWindow(Text="AV Dome Task", Visible=true, Location(X=100, Y=100), Size(Width=1500, Height=600), WindowState=Normal)

    Defer RunningPerformanceBuffer
        SubscribeSubject TrialSuccess
        -> Condition NotNoResponse
            WorkflowInput Source1
            -> Equal(Operand=StringProperty(Value=NoResponse))
            -> BitwiseNot
            -> WorkflowOutput
        -> Equal(Operand=StringProperty(Value=Correct))
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
          Expression: Convert.ToSingle(it)
        Annotation PerformanceSlidingWindow(Text="Consider replacing this with an input parameter from schema / yml")
        -> IntProperty(Value=10) => #5
        #3, #5 -> WithLatestFrom
        -> GroupWorkflow GetAverage
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1) => #1
            #0 -> MemberSelector(Selector=Item2)
            -> PropertyMapping(Count) => #3
            #1, #3 -> BufferCount(Count=10, Skip=1) => #4
            -> Add => #5
            #4 -> MemberSelector(Selector=Count) => #6
            #5, #6 -> Zip
            -> Divide
            -> WorkflowOutput
        -> WorkflowOutput
    -> PublishSubject RunningPerformance

GroupWorkflow "GUI Callbacks"
    GroupWorkflow ValveGUICallbacks(Description=ValveGUICallbacks)
        SubscribeSubject GUI_Callback_Left_flush
        -> IntProperty(Value=1) => #1
        SubscribeSubject GUI_Callback_Right_flush
        -> IntProperty(Value=2) => #3
        #1, #3 -> Merge
        -> MulticastSubject TriggerValve
        -> WorkflowOutput

    GroupWorkflow StepperMotorGUICallbacks(Description=StepperMotorGUICallbacks)
        Annotation "Update Motor IN position data"(Text="Update Motor IN position data")

        GroupWorkflow "Internal Position Update"(Description="Internal Position Update")
            Annotation Motor1_IN_position(Text=Motor1_IN_position)
            -> SubscribeSubject Motor1_Position => #1
            Annotation Motor2_IN_position(Text=Motor2_IN_position)
            -> SubscribeSubject Motor2_Position => #3
            Annotation Motor3_IN_position(Text=Motor3_IN_position)
            -> SubscribeSubject Motor3_Position => #5
            Annotation Motor4_IN_position(Text=Motor4_IN_position)
            -> SubscribeSubject Motor4_Position => #7
            Annotation Motor5_IN_position(Text=Motor5_IN_position)
            -> SubscribeSubject Motor5_Position => #9
            Annotation "Grab all latest inputs"(Text="Grab all latest inputs") => #10
            #1, #3, #5, #7, #9, #10 -> CombineLatest => #11
            Annotation "Sample when any input emits"(Text="Sample when any input emits") => #12
            #1, #3, #5, #7, #9, #12 -> Merge => #13
            #11, #13 -> Sample
            -> Disable Format(Format="{0},{1},{2},{3},{4};", Selector="Item1,Item2,Item3,Item4,Item5") => #15
            Annotation "Store IN position"(Text="Store IN position") => #16
            #15, #16 -> MulticastSubject StepperPosition_BothIn => #17
            Annotation "Sends command with every update"(Text="Sends command with every update") => #18
            #17, #18 -> MulticastSubject StepperPositionCommand => #19
            GroupWorkflow "Init Positions"(Description="Init Positions") => #20
                Annotation Motor1_IN_position(Text=Motor1_IN_position)
                -> IntProperty(Value=1000)
                -> BehaviorSubject Motor1_Position => #2
                Annotation Motor2_IN_position(Text=Motor2_IN_position)
                -> IntProperty(Value=1000)
                -> BehaviorSubject Motor2_Position => #5
                Annotation Motor3_IN_position(Text=Motor3_IN_position)
                -> IntProperty(Value=2000)
                -> BehaviorSubject Motor3_Position => #8
                Annotation Motor4_IN_position(Text=Motor4_IN_position)
                -> IntProperty(Value=2000)
                -> BehaviorSubject Motor4_Position => #11
                Annotation Motor5_IN_position(Text=Motor5_IN_position)
                -> IntProperty(Value=500)
                -> BehaviorSubject Motor5_Position => #14
                #2, #5, #8, #11, #14 -> Merge
                -> WorkflowOutput
            #19, #20 -> SubscribeWhen
            #5 -> Subtract(Operand=IntProperty(Value=1000)) => #22
            #7 -> Subtract(Operand=IntProperty(Value=1000)) => #23
            #1, #3, #22, #23, #9 -> CombineLatest => #24
            #24, #13 -> Sample
            -> Disable Format(Format="{0},{1},{2},{3},{4};", Selector="Item1,Item2,Item3,Item4,Item5")
            -> MulticastSubject StepperPosition_BothOut

        Annotation "ZERO, IN, OUT commands"(Text="ZERO, IN, OUT commands")

        GroupWorkflow "Position Callbacks"(Description="Position Callbacks. Overall: ZERO, IN, OUT")
            Annotation HomePosition(Text=HomePosition)
            -> SubscribeSubject StepperPosition_HOME => #1
            SubscribeSubject GUICallbackStepperHOME => #2
            #1, #2 -> Sample
            -> MulticastSubject StepperPositionCommand

            Annotation INPosition(Text=INPosition)
            -> SubscribeSubject StepperPosition_BothIn => #6
            SubscribeSubject GUICallbackStepperIN => #7
            #6, #7 -> Sample
            -> MulticastSubject StepperPositionCommand

            Annotation OUTPosition(Text=OUTPosition)
            -> SubscribeSubject StepperPosition_BothOut => #11
            SubscribeSubject GUICallbackStepperOUT => #12
            #11, #12 -> Sample
            -> MulticastSubject StepperPositionCommand

        Annotation "Individual Motor Callbacks"(Text="Individual Motor Callbacks")

        GroupWorkflow Motor1
            SubscribeSubject Motor1_UP => #0
            SubscribeSubject Motor1_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            IntProperty(Value=30) => #4
            #3, #4 -> CombineLatest
            -> Add
            -> MulticastSubject Motor1_Position

            SubscribeSubject Motor1_DOWN => #8
            SubscribeSubject Motor1_Position => #9
            #8, #9 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #11
            IntProperty(Value=30) => #12
            #11, #12 -> CombineLatest
            -> Subtract
            -> MulticastSubject Motor1_Position

        GroupWorkflow Motor2
            SubscribeSubject Motor2_UP => #0
            SubscribeSubject Motor2_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            IntProperty(Value=30) => #4
            #3, #4 -> CombineLatest
            -> Add
            -> MulticastSubject Motor2_Position

            SubscribeSubject Motor2_DOWN => #8
            SubscribeSubject Motor2_Position => #9
            #8, #9 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #11
            IntProperty(Value=30) => #12
            #11, #12 -> CombineLatest
            -> Subtract
            -> MulticastSubject Motor2_Position

        GroupWorkflow Motor3
            SubscribeSubject Motor3_UP => #0
            SubscribeSubject Motor3_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            IntProperty(Value=30) => #4
            #3, #4 -> CombineLatest
            -> Add
            -> MulticastSubject Motor3_Position

            SubscribeSubject Motor3_DOWN => #8
            SubscribeSubject Motor3_Position => #9
            #8, #9 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #11
            IntProperty(Value=30) => #12
            #11, #12 -> CombineLatest
            -> Subtract
            -> MulticastSubject Motor3_Position

        GroupWorkflow Motor4
            SubscribeSubject Motor4_UP => #0
            SubscribeSubject Motor4_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            IntProperty(Value=30) => #4
            #3, #4 -> CombineLatest
            -> Add
            -> MulticastSubject Motor4_Position

            SubscribeSubject Motor4_DOWN => #8
            SubscribeSubject Motor4_Position => #9
            #8, #9 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #11
            IntProperty(Value=30) => #12
            #11, #12 -> CombineLatest
            -> Subtract
            -> MulticastSubject Motor4_Position

        GroupWorkflow Motor5
            SubscribeSubject Motor5_UP => #0
            SubscribeSubject Motor5_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            IntProperty(Value=30) => #4
            #3, #4 -> CombineLatest
            -> Add
            -> MulticastSubject Motor5_Position

            SubscribeSubject Motor5_DOWN => #8
            SubscribeSubject Motor5_Position => #9
            #8, #9 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #11
            IntProperty(Value=30) => #12
            #11, #12 -> CombineLatest
            -> Subtract
            -> MulticastSubject Motor5_Position

GroupWorkflow Logging
    IncludeWorkflow(Path=UclOpen.Logging:LogController.bonsai, SubjectId=Algernon, SessionId=001, Path=C:\Data)

    GroupWorkflow TrialParameters
        SubscribeSubject ResponseData
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
          Expression:
            new (
            it.Item2 as Response,
            it.Item1 as CorrectReponse
            )
        SubscribeSubject thisTrialData => #2
        #1, #2 -> Zip
        -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
        -> IncludeWorkflow(Path=UclOpen.Logging:LogData.bonsai, LogName="", Selector=Seconds, Extension=csv)
        -> WorkflowOutput

    GroupWorkflow BehaviorBoard
        SubscribeSubject BehaviorEvents
        -> GroupWorkflow ExcludeAnalogDataMaybe
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=ExcludeAnalogData?))
            -> BooleanProperty(Value=true) => #2
            #0, #2 -> WithLatestFrom => #3
            -> Condition Flagged
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1)
            -> Harp.Behavior.FilterRegister(FilterType=Exclude, Register=Harp.Behavior.AnalogData) => #6
            #3 -> Condition NotFlagged
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> BitwiseNot
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #8
            #6, #8 -> Merge
            -> WorkflowOutput
        -> IncludeWorkflow(Path=UclOpen.Logging:LogHarpDevice.bonsai, LogName="")
        -> WorkflowOutput

    GroupWorkflow Cameras
        SubscribeSubject FrameEvents1
        -> IncludeWorkflow(Path=UclOpen.Logging:LogVideo.bonsai, LogName=VideoData_Camera1, FrameRate=50)
        -> BehaviorSubject Camera1FrameForGUI

        SubscribeSubject FrameEvents2
        -> IncludeWorkflow(Path=UclOpen.Logging:LogVideo.bonsai, LogName=VideoData_Camera2, FrameRate=50)
        -> BehaviorSubject Camera2FrameForGUI

        SubscribeSubject FrameEvents3
        -> IncludeWorkflow(Path=UclOpen.Logging:LogVideo.bonsai, LogName=VideoData_Camera3, FrameRate=50)
        -> BehaviorSubject Camera3FrameForGUI

    Disable GroupWorkflow Audio
        SubscribeSubject AudioTrigger
        -> StringProperty(Value=AudioTrigger)
        -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
        -> IncludeWorkflow(Path=C:\dev\CoenLab\bonsai-workflows\logging\LogData.bonsai, LogName="", Selector="Seconds,Value", Extension=csv)
        -> WorkflowOutput

    GroupWorkflow LicketySplit
        SubscribeSubject LickEventsLeft
        -> IncludeWorkflow(Path=UclOpen.Logging:LogHarpDevice.bonsai, LogName=LicketySplitLeft)

        SubscribeSubject LickEventsRight
        -> IncludeWorkflow(Path=UclOpen.Logging:LogHarpDevice.bonsai, LogName=LicketySplitRight)

SubscribeSubject ResponseData => #6
SubscribeSubject TrialSuccess => #7
#6, #7 -> Zip
-> SelectMany RedefineTrialData
    WorkflowInput Source1
    -> Take(Count=1)
    -> AsyncSubject source

    SubscribeSubject source
    -> SelectMany RedefineTrial
        SubscribeSubject TrialConfig
        -> TrialTypeInitialise(Seed=0, TrialType=0, LastResponse=0, WasTimeout=false, WasCorrect=true)
        -> WorkflowOutput
    -> Take(Count=1)
    -> WorkflowOutput
-> MulticastSubject thisTrialData

SubscribeSubject thisTrialData
-> SelectMany ExecuteTrial => #12
    WorkflowInput Source1
    -> AsyncSubject trial

    SubscribeSubject trial => #2
    ExternalizedMapping(StimulusDuration) => #3
    #2, #3 -> SelectMany StimuliPresentation
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject settings

        SubscribeSubject settings
        -> SelectMany "Define Speaker location"
            SubscribeSubject AuditoryTargetSideDistribution
            -> Bonsai.Numerics.Distributions.Sample => #1
            -> Condition Left?
                WorkflowInput Source1
                -> GreaterThanOrEqual(Operand=BooleanProperty(Value=false))
                -> BitwiseNot
                -> WorkflowOutput
            -> Bonsai.Shaders.CreateVector3(X=-90, Y=15, Z=0) => #3
            #1 -> Condition Right?
                WorkflowInput Source1
                -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0))
                -> WorkflowOutput
            -> Bonsai.Shaders.CreateVector3(X=90, Y=15, Z=0) => #5
            #3, #5 -> Merge => #6
            SubscribeSubject SpeakerLocations
            -> PropertyMapping(Locations) => #8
            #6, #8 -> SpatialLookup(Locations(Vector3(X=-90, Y=15, Z=0), Vector3(X=90, Y=15, Z=0), Vector3(X=0, Y=15, Z=0)))
            -> MulticastSubject ActiveSoundChannels => #10
            WorkflowInput Source1 => #11
            #10, #11 -> Sample
            -> WorkflowOutput
        -> BooleanProperty(Value=true)
        -> MulticastSubject StartAuditoryStimulus

        SubscribeSubject DrawStimuli => #7
        Disable SubscribeSubject settings
        -> Disable MemberSelector(Selector=visualAzimuth)
        -> Disable Subtract(Operand=DoubleProperty(Value=0.008725)) => #10
        Disable DoubleProperty(Value=6900) => #11
        #10, #11 -> Disable CombineLatest
        -> Disable Multiply
        -> Disable PropertyMapping(LocationX(Selector=it)) => #14
        SubscribeSubject settings => #15
        -> PropertyMapping(LocationX(Selector=visualAzimuth), Contrast(Selector=visualContrast)) => #16
        #7, #14, #16 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawGratings.bonsai
          LocationX=60
          LocationY=0
          Layer=0
          ExtentX=15
          ExtentY=15
          SpatialFrequency=0.04
          TemporalFrequency=2
          Phase=0
          Angle=0
          SquareWave=false
          Contrast=0.4
          DutyCycle=nil
          Radius=1
          Aperture=0
          Opacity=1
        #15 -> MemberSelector(Selector=visualAzimuth)
        #15 -> MemberSelector(Selector=Contrast)

        ExternalizedMapping(Value(DisplayName=StimulusDuration)) => #20
        Annotation(Text="To add to schema") => #21
        #20, #21 -> FloatProperty(Value=1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime(Selector=it))
        -> Bonsai.Shaders.Timer(DueTime=PT1S)
        -> WorkflowOutput
    -> Disable SelectMany SendSpoutInCommand
        WorkflowInput Source1 => #0
        Annotation MoveToInPosition(Text=MoveToInPosition)
        -> SubscribeSubject StepperPosition_BothIn
        -> MulticastSubject StepperPositionCommand => #3
        #0, #3 -> SubscribeWhen
        -> WorkflowOutput
    -> Disable SelectMany PlayGoCue
        SubscribeSubject goCue => #0
        -> Disable Bonsai.Audio.AudioPlayback(DeviceName="Generic Software on Speakers (Realtek(R) Audio)", SampleRate=44100, State=Playing)
        -> Disable WorkflowOutput
        #0 -> BooleanProperty(Value=true)
        -> MulticastSubject StartAuditoryGoCue
        -> WorkflowOutput
    -> SelectMany Response
        SubscribeSubject LickEventsLeft
        -> StringProperty(Value=Left) => #1
        SubscribeSubject LickEventsRight
        -> StringProperty(Value=Right) => #3
        Bonsai.Shaders.Timer(DueTime=PT1S)
        -> StringProperty(Value=NoResponse) => #5
        #1, #3, #5 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany ApplyConsequences
        SubscribeSubject trial
        -> MemberSelector(Selector=targetSide) => #1
        WorkflowInput Source1 => #2
        #1, #2 -> WithLatestFrom => #3
        -> Condition HIT => #4
            WorkflowInput Source1
            -> Equal
            -> WorkflowOutput
        -> Condition Left
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> Equal(Operand=StringProperty(Value=Left))
            -> WorkflowOutput
        -> IntProperty(Value=1) => #6
        #4 -> Condition Right
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> Equal(Operand=StringProperty(Value=Right))
            -> WorkflowOutput
        -> IntProperty(Value=2) => #8
        #6, #8 -> Merge => #9
        Annotation "Int determines which valve opens"(Text="Int determines which valve opens") => #10
        #9, #10 -> MulticastSubject TriggerValve => #11
        Annotation "Give Animal 1s to drink"(Text="Give Animal 1s to drink") => #12
        #11, #12 -> Bonsai.Shaders.Delay(DueTime=PT1S)
        -> StringProperty(Value=Correct) => #14
        #3 -> Condition INCORRECT
            WorkflowInput Source1
            -> Condition "Skip is NoResponse"
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> Equal(Operand=StringProperty(Value=NoResponse))
                -> BitwiseNot
                -> WorkflowOutput
            -> Equal
            -> BitwiseNot
            -> WorkflowOutput
        -> StringProperty(Value=Incorrect)
        -> SelectMany Timeout => #17
            ExternalizedMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT2S)
            -> Take(Count=1) => #2
            WorkflowInput Source1 => #3
            #2, #3 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput

            Annotation(Text="TODO: add to trialDataSchemas")
            -> Disable SubscribeSubject TrialConfig
            -> Disable MemberSelector(Selector=Quiescence.Timeout)
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
        #3 -> Condition MISS
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> Equal(Operand=StringProperty(Value=NoResponse))
            -> WorkflowOutput
        -> StringProperty(Value=NoResponse)
        -> SelectMany Timeout => #20
            ExternalizedMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT2S)
            -> Take(Count=1) => #2
            WorkflowInput Source1 => #3
            #2, #3 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput

            Annotation(Text="TODO: add to trialDataSchemas")
            -> Disable SubscribeSubject TrialConfig
            -> Disable MemberSelector(Selector=Quiescence.Timeout)
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
        #14, #17, #20 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> Disable SelectMany SendSpoutOutCommand
        WorkflowInput Source1 => #0
        Annotation MoveToInPosition(Text=MoveToInPosition)
        -> SubscribeSubject StepperPosition_BothOut
        -> MulticastSubject StepperPositionCommand => #3
        #0, #3 -> SubscribeWhen
        -> WorkflowOutput
    -> MulticastSubject TrialSuccess => #10
    SubscribeSubject TrialCount
    -> Take(Count=1)
    -> Add(Operand=IntProperty(Value=1))
    -> MulticastSubject TrialCount => #14
    #10, #14 -> Zip
    -> SelectMany ITI
        WorkflowInput Source1 => #0
        SubscribeSubject trial
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(ITI)
        -> PropertyMapping(DueTime) => #3
        #0, #3 -> Bonsai.Shaders.Delay(DueTime=PT2.226S)
        -> WorkflowOutput
    -> WorkflowOutput
Annotation => #13
  Text:
    Here we have the trial number and the reponse code.
    Things we want to do with this:

    1. Different outcomes depending on response,
            # Incorrect, then we have a timeout
            # Correct, valve trigger


    1. Track performance and visualise in the gui
            Track actual response (0/-1/1) of last 50 trials
            Running performance over 20 responsive trials (True/False)
#12, #13 -> MulticastSubject ResponseData => #14
Annotation "This fires at declaration, so skip"(Text="This fires at declaration, so skip")
-> SubscribeSubject StartSession
-> Skip(Count=1) => #17
#14, #17 -> SubscribeWhen

Disable Bonsai.Windows.Input.KeyDown(Filter=Up, SuppressRepetitions=false) => #19
Disable ExternalizedMapping(Value(DisplayName=MoveSteps)) => #20
#19, #20 -> Disable IntProperty(Value=0)
-> Disable BehaviorSubject raisePlatform
Disable Bonsai.Windows.Input.KeyDown(Filter=Down, SuppressRepetitions=false) => #23
#23, #20 -> Disable IntProperty(Value=0)
-> Disable BehaviorSubject lowerPlatform

SubscribeSubject StepperDriver1Events
-> Harp.StepperDriver.Parse(Register=Harp.StepperDriver.Encoders) => #27
-> MemberSelector(Selector=Encoder0)
#27 -> MemberSelector(Selector=Encoder1)
#27 -> MemberSelector(Selector=Encoder2)
